PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $'GBP ' + str(reward_today) + ' today or GBP ' + str(future_reward) + ' after ' + str(delay) + ' days'
    KeyboardComponent key_resp
      allowedKeys = 't','l',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/ADITI JAIN/OneDrive/Desktop/delay conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 24, 'future_reward': 81, 'delay': 148},
      {'reward_today': 30, 'future_reward': 63, 'delay': 128},
      {'reward_today': 33, 'future_reward': 54, 'delay': 74},
      {'reward_today': 12, 'future_reward': 84, 'delay': 97},
      {'reward_today': 31, 'future_reward': 66, 'delay': 7},
      {'reward_today': 62, 'future_reward': 97, 'delay': 152},
      {'reward_today': 11, 'future_reward': 22, 'delay': 168},
      {'reward_today': 11, 'future_reward': 33, 'delay': 151},
      {'reward_today': 30, 'future_reward': 98, 'delay': 56},
      {'reward_today': 31, 'future_reward': 96, 'delay': 132},
      {'reward_today': 58, 'future_reward': 70, 'delay': 43},
      {'reward_today': 68, 'future_reward': 82, 'delay': 86},
      {'reward_today': 51, 'future_reward': 71, 'delay': 108},
      {'reward_today': 24, 'future_reward': 42, 'delay': 15},
      {'reward_today': 73, 'future_reward': 90, 'delay': 94},
      {'reward_today': 12, 'future_reward': 78, 'delay': 116},
      {'reward_today': 16, 'future_reward': 85, 'delay': 117},
      {'reward_today': 30, 'future_reward': 61, 'delay': 6},
      {'reward_today': 48, 'future_reward': 64, 'delay': 133},
      {'reward_today': 27, 'future_reward': 81, 'delay': 52}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
    Routine trial
  LoopTerminator trials
