PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = go no go solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If the letter is RED → press SPACE

        If the letter is BLUE → don't press anything

        Press any space to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import math

        def _blank(x):
            if x is None:
                return True
            if isinstance(x, float):
                return math.isnan(x)
            return str(x).strip()==''

        try:
            tt = str(trial_type).strip().lower()
        except:
            tt = ''

        try:
            ck = correct_key
        except:
            ck = ''

        if _blank(ck):
            ck_norm = ''
        else:
            ck_norm = str(ck).strip().lower()

        is_nogo = (tt == 'nogo') or (ck_norm == '')

        expected_key = '' if is_nogo else 'space'

        key_resp.keys = None
        key_resp.rt = None
      End Routine:
        if is_nogo:
            if key_resp.keys is None:
                correct_val = 1
                rt_val = float('nan')
            else:
                correct_val = 0
                rt_val = key_resp.rt
        else:
            if key_resp.keys == 'space':
                correct_val = 1
                rt_val = key_resp.rt
            else:
                correct_val = 0
                rt_val = key_resp.rt if key_resp.keys is not None else float('nan')

        thisExp.addData('resp_key', key_resp.keys if key_resp.keys else '')
        thisExp.addData('rt', rt_val)
        thisExp.addData('correct', correct_val)
        thisExp.addData('is_nogo', int(is_nogo))
        thisExp.addData('expected_key', expected_key)
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent stim_text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $letter
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    KeyboardComponent key_respp
      allowedKeys [set every repeat] = 'space'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      storeCorrect = True
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Flow
  Routine trial
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = C:/Users/ADITI JAIN/OneDrive/Desktop/solo conditions new final.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_num': 1, 'block': 'main', 'color': 'blue', 'letter': 'x', 'trial_type': 'NoGo', 'correct_key': None},
      {'trial_num': 2, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 3, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 4, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 5, 'block': 'main', 'color': 'blue', 'letter': 'x', 'trial_type': 'NoGo', 'correct_key': None},
      {'trial_num': 6, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 7, 'block': 'main', 'color': 'blue', 'letter': 'x', 'trial_type': 'NoGo', 'correct_key': None},
      {'trial_num': 8, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 9, 'block': 'main', 'color': 'blue', 'letter': 'x', 'trial_type': 'NoGo', 'correct_key': None},
      {'trial_num': 10, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 11, 'block': 'main', 'color': 'blue', 'letter': 'x', 'trial_type': 'NoGo', 'correct_key': None},
      {'trial_num': 12, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'},
      {'trial_num': 13, 'block': 'main', 'color': 'red', 'letter': 'x', 'trial_type': 'Go', 'correct_key': 'space'}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
    Routine main
  LoopTerminator main_loop
